PsychoPy2experiment version="1.78.01"
Settings
  Monitor = scannerMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'mriMode': u'Scan', u'runOrder': u'B', u'hand': u'right', u'session': u'001', u'stimType': u'c', u'participant': u'NSSI153', u'colorVersion': u'1'}
  expName = RewardGoNoGo
  logging level = debug
  Units = deg
  Screen = 1
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Routines
  Routine End
    TextComponent endTask
      text = Congratulations! You finished!
      startVal [time (s)] = 0
      letterHeight = 1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0
      store = nothing
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  Routine feedback
    CodeComponent rewardFrames
      Begin Experiment:
        # set reward text color
        rewardColor='white'
      Begin Routine:
        # set border color of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        rewardFrame2.setLineColor(borderColor)

        # calculate reward total
        outcomeTotal = trials.data['outcomeNumber'].sum()
        if outcomeTotal >= 0:
           if outcomeTotal == 0:
            outcomeType='got'
           else:
            outcomeType='won'
        if outcomeTotal<0:
           outcomeType='lost'

        if outcomeType=='won':
            rewardColor='lawngreen'
        else:
            rewardColor='orangered'

        outcomeDisplay=abs(outcomeTotal)
        msg = "You %s $%s0!" %(outcomeType, outcomeDisplay)
      End Routine:
        blocks.addData('outcomeTotal', outcomeTotal)
    TextComponent reward
      color [set every repeat] = $rewardColor
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0
      letterHeight = 2
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    PolygonComponent rewardFrame1
      startVal [time (s)] = 0.0
      size = [18, 18]
      fillColor = None
      stopVal [duration (s)] = 1.5
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    PolygonComponent rewardFrame2
      startVal [time (s)] = 0.0
      size = [19, 19]
      fillColor = None
      stopVal [duration (s)] = 1.5
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    CodeComponent feedbackTiming
      Begin Routine:
        blocks.addData('feedbackOnset', fmriClock.getTime())
      End Routine:
        blocks.addData('feedbackOffset', fmriClock.getTime())
    CodeComponent setFeedbackPhysioPins
      Begin Routine:
        if valueCondition=='low': # set pins for feedback in low block
            pins='00100001'
            blocks.addData('lowFeedbackOnset', fmriClock.getTime())
        else: # if feedback in high block
            pins='00100010'
            blocks.addData('highFeedbackOnset', fmriClock.getTime())

        ser and ser.writeUSB(1,int(pins,2))
      End Routine:
        if valueCondition=='low': # lower pins for feedback in low block
            pins='00000000'
            blocks.addData('lowFeedbackOffset', fmriClock.getTime())
        else: # if feedback in high block
            pins='00000000'
            blocks.addData('highFeedbackOffset', fmriClock.getTime())

        ser and ser.writeUSB(1,int(pins,2))
  Routine lastJitter
    TextComponent text
      text = +
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 1.5
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  Routine trial_cue
    CodeComponent code
      Begin Experiment:
        # set border color
        borderColor='black'
        valueCondition=None
        valueConditions=None
      Begin Routine:
        if Run=='Run1':
            valueConditions=ValueCondition1
        if Run=='Run2':
            valueConditions=ValueCondition2
        if Run=='Run3':
            valueConditions=ValueCondition3
        if Run=='Run4':
            valueConditions=ValueCondition4



        # Set Cue image on Reward Value Condition
        if (valueConditions == 'Low1') or (valueConditions == 'Low2') or (valueConditions == 'Low3') or (valueConditions == 'Low4') or (valueConditions == 'Low5') or (valueConditions=='Low6'):
            valueCondition='low'
            cueImage = 'low.png'
        else:
            valueCondition='high'
            cueImage = 'high.png'
        # set border width of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        frame2.setLineColor(borderColor)
      End Routine:
        blocks.addData('valueConditions', valueConditions)
        blocks.addData('valueCondition', valueCondition)
        blocks.addData('cueImage', cueImage)
    CodeComponent timingCode
      Each Frame:
        #if not cueTimeAdded:
        #    currentLoop.addData('blockOnset', fmriClock.getTime())
        #    currentLoop.addData('cueOnset', fmriClock.getTime())
        #    cueTimeAdded = True
      Begin Routine:
        #cueTimeAdded = False
        currentLoop.addData('blockOnset', fmriClock.getTime())
        currentLoop.addData('cueOnset', fmriClock.getTime())
      End Routine:
        currentLoop.addData('cueOffset', fmriClock.getTime())
    ImageComponent Cue2
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      image [set every repeat] = $os.path.join('images',cueImage)
      size = [12.5, 10]
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    PolygonComponent frame1
      startVal [time (s)] = 0.0
      size = [18, 18]
      fillColor = None
      stopVal [duration (s)] = 1
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    PolygonComponent frame2
      startVal [time (s)] = 0.0
      size = [19, 19]
      fillColor = None
      stopVal [duration (s)] = 1
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    CodeComponent generateJitterList
      Begin Experiment:
        allISIs=[3.5, 2.5, 3, 2.5, 1.5, 2, 1.5, 2.5]

        import copy, random
      Begin Routine:
        ISIs=copy.copy(allISIs)
        random.shuffle(ISIs)
    CodeComponent setStimRotations
      Begin Experiment:
        rotations=[45, 90, 135, 180, 225, 270, 315, 360]

        import copy, random
      Begin Routine:
        AllRotations=copy.copy(rotations)
        random.shuffle(AllRotations)
    PolygonComponent drawCircle
      startVal [time (s)] = 0.0
      size = [16.5, 16.5]
      fillColor = None
      nVertices = 90
      stopVal [duration (s)] = 1.0
      lineWidth = 5
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    CodeComponent blockTiming
      Begin Experiment:
        import time
        expInfo['expStartTime'] = time.ctime()

        BLOCK_DURATION = 10
        blockClock = core.Clock()
      Begin Routine:
        blockClock.reset()
    CodeComponent manageTrigger
      Each Frame:
        if not triggerZeroed and t > 1:
            if (valueCondition.startswith("low")):
                pins = '00000001'
            elif (valueCondition.startswith("high")):
                pins = '00000010'

            ser and ser.writeUSB(0,0)
            ser and ser.writeUSB(1,int(pins,2))
            triggerZeroed = True
      Begin Routine:
        # Zero Trigger after 1s (to give analog signal on pins time to rise)
        triggerZeroed= False
    CodeComponent setCuePhysioPins
      Begin Routine:
        if valueCondition=='low': # set pins for cue in low block
            pins='00000101'
            blocks.addData('lowCueOnset', fmriClock.getTime())
        else:
            pins='00000110' # set pins for cue in high block
            blocks.addData('highCueOnset', fmriClock.getTime())

        ser and ser.writeUSB(1,int(pins,2))
      End Routine:
        if valueCondition=='low': # lowers pins for cue in low block
            pins='00000001'
            blocks.addData('lowCueOffset', fmriClock.getTime())
        else:
            pins='00000010' # lowers pins for cue in high block
            blocks.addData('highCueOffset', fmriClock.getTime())

        ser and ser.writeUSB(1,int(pins,2))
  Routine jitter
    TextComponent jitteredISI
      text = +
      stopVal [duration (s)] = $ISI
      durationEstim = 2
      startEstim = 0
      startVal [time (s)] = 0.0
      letterHeight = 1.5
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    PolygonComponent jitterFrame1
      startVal [time (s)] = 0.0
      size = [18, 18]
      fillColor = None
      stopVal [duration (s)] = $ISI
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    PolygonComponent jitterFrame2
      startVal [time (s)] = 0.0
      size = [19, 19]
      fillColor = None
      stopVal [duration (s)] = $ISI
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    CodeComponent jitter_code
      Begin Routine:
        # set border color of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        jitterFrame2.setLineColor(borderColor)

        # Set Target Image on Go/Nogo Condition
        if expInfo['hand'] == 'right':
            if targetType == 'go':
              correct =  '1'
            else:
              correct = None
        else: # if hand='left'
            if targetType == 'go':
              correct =  '6'
            else:
              correct = None
    KeyboardComponent lateResp
      correctAns = $correct
      storeCorrect = True
      stopVal [duration (s)] = 1
      durationEstim = 2
      forceEndRoutine = False
      allowedKeys = '0', '1', '2', '3', '4', '5', '6', '7', '8', '9', 'space'
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent writeFeedbackOutcome
      Each Frame:
        # write outcome text
        if targetResp.keys: # if a response is made during planet presentation
          if targetResp.corr==1:
                if valueCondition == 'low':
                    outcomeText = '+ $0.20'
                    outcomeNumber=0.20
                else:  # valueCondition == 'high'
                    outcomeText = '+ $1.00'
                    outcomeNumber=1.00
          else: # if targetResp.corr=0
            if targetType=='nogo':
                if valueCondition == 'low':
                    outcomeText = '- $0.10'
                    outcomeNumber= -0.10
                else:  # valueCondition == 'high'
                    outcomeText = '- $0.50'
                    outcomeNumber= -0.50

        if not targetResp.keys: # if no response is made during planet presentation
          if  targetType=='go':
            if lateResp.corr==1: # if correct late response
                if valueCondition == 'low':
                    outcomeText = '+ $0.20'
                    outcomeNumber=0.20
                else:  # valueCondition == 'high'
                    outcomeText = '+ $1.00'
                    outcomeNumber=1.00
            else: # if no response is made
                if valueCondition == 'low':
                    outcomeText = '- $0.10'
                    outcomeNumber= -0.10
                else:  # valueCondition == 'high'
                    outcomeText = '- $0.50'
                    outcomeNumber= -0.50

          elif targetType == 'nogo': # if no response is made for a nogo trial
            if lateResp.rt>1.5:
                if valueCondition == 'low':
                    outcomeText = '+ $0.20'
                    outcomeNumber=0.20
                else: # if high
                    outcomeText = '+ $1.00'
                    outcomeNumber=1.00
            else: # if a late response is made for a nogo
                if valueCondition == 'low':
                    outcomeText = '- $0.10'
                    outcomeNumber= -0.10
                else:  # valueCondition == 'high'
                    outcomeText = '- $0.50'
                    outcomeNumber= -0.50


        # label accuracy including late responses
        if outcomeNumber==1.00 or outcomeNumber==0.20:
            Accuracy=1
        else:
            Accuracy=0
      End Routine:
        trials.addData('Accuracy', Accuracy)
        trials.addData('outcomeText', outcomeText)
        trials.addData('outcomeNumber', outcomeNumber)
    CodeComponent recordRT
      Begin Experiment:
        RT=None
        goRT=None
      Each Frame:
        if targetResp.keys:
            RT=targetResp.rt
        else:
            RT=np.add(lateResp.rt, 0.5)
        #    RT=0.5 + (lateResp.rt)

        if targetType=='go':
            goRT=RT
        else:
            goRT='nan'
      End Routine:
        trials.addData('RT', RT)
        trials.addData('goRT', goRT)
  Routine endBlock
    TextComponent breakFixation
      text = +
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      letterHeight = 1.5
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    CodeComponent blockOffset
      End Routine:
        blocks.addData('blockOffset', fmriClock.getTime())
  Routine fixation_2
    CodeComponent rewardFrames_3
      Begin Experiment:
        # set reward text color
        rewardColor='white'
      Begin Routine:
        # set border color of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        rewardFrame2.setLineColor(borderColor)

        # calculate reward total
        outcomeTotal = trials.data['outcomeNumber'].sum()
        if outcomeTotal >= 0:
           if outcomeTotal == 0:
            outcomeType='got'
           else:
            outcomeType='won'
        if outcomeTotal<0:
           outcomeType='lost'

        if outcomeType=='won':
            rewardColor='green'
        else:
            rewardColor='red'

        outcomeDisplay=abs(outcomeTotal)
        msg = "You %s $%s0!" %(outcomeType, outcomeDisplay)
      End Routine:
        trials.addData('outcomeTotal', outcomeTotal)
    TextComponent reward_3
      color [set every repeat] = $rewardColor
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0
      letterHeight = 1
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    PolygonComponent rewardFrame1_3
      startVal [time (s)] = 0.0
      size = [18, 18]
      fillColor = None
      stopVal [duration (s)] = 1.5
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    PolygonComponent rewardFrame2_3
      startVal [time (s)] = 0.0
      size = [19, 19]
      fillColor = None
      stopVal [duration (s)] = 1.5
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    CodeComponent feedbackTiming_3
      Begin Routine:
        trials.addData('feedbackOnset', fmriClock.getTime())
      End Routine:
        trials.addData('feedbackOffset', fmriClock.getTime())
  Routine jitter_2
    CodeComponent fixationFrames_2
      Begin Routine:
        # set border color of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        fixationFrame2.setLineColor(borderColor)
    TextComponent fixation1_2
      color [set every repeat] = white
      text [set every repeat] = +
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0
      letterHeight = 1.5
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    PolygonComponent fixationFrame1_2
      startVal [time (s)] = 0.0
      size = [18, 18]
      fillColor = None
      stopVal [duration (s)] = 2
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    PolygonComponent fixationFrame2_2
      startVal [time (s)] = 0.0
      size = [19, 19]
      fillColor = None
      stopVal [duration (s)] = 2
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  Routine Welcome
    TextComponent welcomeScreen
      text = Welcome to the planets game!
      startVal [time (s)] = 0.0
      letterHeight = 2
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    KeyboardComponent advanceScreen
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent polygon
      pos = [-15, 12]
      startVal [time (s)] = 0.0
      size = [2, 2]
      fillColor = $[1,1,1]
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  Routine waitForScanner
    CodeComponent wait_for_scanner_code
      Begin Experiment:
        fmriClock = core.Clock()
        trigger = 'usb'
        #trigger = 'parallel'
        if trigger == 'parallel':
            from psychopy.contrib import parallel as winioport
            #from psychopy import parallel
        elif trigger == 'usb':
            from psychopy.hardware.emulator import launchScan
            #
            # settings for launchScan:
            MR_settings = {
                'TR': 2.000, # duration (sec) per volume
                'volumes': 210, # number of whole-brain 3D volumes / frames
                'sync': 'equal', # character to use as the sync timing event; assumed to come at start of a volume
                'skip': 0, # number of volumes lacking a sync pulse at start of scan (for T1 stabilization)
                }

        # for GSR sync
        import serial
        class HvdSerial(serial.Serial):
            def writeUSB(self,dest,val):
                self.write(chr(dest))
                self.write(chr(val))

        try:
            ser = HvdSerial('/dev/tty.usbmodem12341',timeout=1)
            # Zero Out Parallel & BNC
            ser.writeUSB(0,0)
            core.wait(.3)
            ser.writeUSB(1,0)
            core.wait(.3)
        except serial.SerialException:
            ser = None
            logging.warn('No Serial Device Found.')
      Begin Routine:
        if expInfo['mriMode'] != 'Off':
            if trigger == 'usb':
                vol = launchScan(win, MR_settings,
                      globalClock=fmriClock,
                      mode=expInfo['mriMode'])
                if ser: # for GSR sync
                    ser.writeUSB(0,1)  # Raise BNC
                    ser.writeUSB(1,int('11111111',2))  # Raise all pins for Parallel

            elif trigger == 'parallel':
                address = 0x378
                #parallel.setPortAddress(0x378)
                wait_msg = "Get Ready!"
                pinStatus = winioport.inp(address)
                waitMsgStim = visual.TextStim(win, color='white', text=wait_msg)
                waitMsgStim.draw()
                win.flip()
                while True:
                    if pinStatus != winioport.inp(address):
                       break
                       # start exp when pin values change
                fmriClock.reset()
                logging.exp('parallel trigger: start of scan')
                win.flip()  # blank the screen on first sync pulse received

        expInfo['triggerWallTime'] = time.ctime()
      End Routine:
        routineTimer.reset()
      End Experiment:
        ser.writeUSB(0,0)
        ser.writeUSB(1,0)
        ser.close()
        win.close()
        core.quit()
    CodeComponent logVersionName
      Begin Routine:
        runs.addData('TaskVersion', runOrderFile)
  Routine trigger
    CodeComponent assignImages
      Begin Experiment:
        if expInfo['stimType'] == 'c':
            Go1 = 'crater_planet1.png'
            Go2 = 'crater_planet2.png'
            Go3 = 'crater_planet3.png'
            Go4 = 'crater_planet4.png'
            NoGo1 = 'striped_planet1.png'
            NoGo2 = 'striped_planet2.png'
            NoGo3 = 'striped_planet3.png'
            NoGo4 = 'striped_planet4.png'
        else:
            NoGo1 = 'crater_planet1.png'
            NoGo2 = 'crater_planet2.png'
            NoGo3 = 'crater_planet3.png'
            NoGo4 = 'crater_planet4.png'
            Go1 = 'striped_planet1.png'
            Go2 = 'striped_planet2.png'
            Go3 = 'striped_planet3.png'
            Go4 = 'striped_planet4.png'
    TextComponent waitForTrigger
      text = Get Ready!
      startVal [time (s)] = 0.0
      letterHeight = 1
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    KeyboardComponent receiveTrigger
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent createColors
      Begin Experiment:
        pinkFill=[1.000,0.137,0.647]
        orangeFill=[1, 0.4980, 0]
        blueFill=[0,0,1]
        greenFill=[0.3020, 0.6863, 0.2902]
        redFill=[0.89, 0.102, 0.11]
        ltblueFill=[0.2147, 0.4941, 0.7216]
        purpleFill=[0.5961, 0.3059, 0.63922]
        yellowFill=[1,1,0.2]
  Routine calcFB
    CodeComponent calculateFeedback
      Begin Experiment:
        # set outcome text
        outcomeText='$0'
        outcomeNumber=0
      Begin Routine:
        # write outcome text
        if key_resp_1.corr==1:
                if valueCondition == 'low':
                    outcomeText = '+ $0.20'
                    outcomeNumber=' 0.20'
                else:  # valueCondition == 'high'
                    outcomeText = '+ $1.00'
                    outcomeNumber='1.00'
        else:
              if valueCondition == 'low':
                    outcomeText = '- $0.10'
                    outcomeNumber= '-0.10'
              else:  # valueCondition == 'high'
                    outcomeText = '- $0.50'
                    outcomeNumber= '-0.50'
      End Routine:
        trials.addData('outcomeText',outcomeText)
        trials.addData('outcomeNumber',outcomeNumber)
  Routine runEnd
    TextComponent breakText
      text = You finished this round!
      startVal [time (s)] = 0
      letterHeight = 1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent runOffset
      Begin Routine:
        runs.addData('runOffset', fmriClock.getTime())
  Routine fixation
    CodeComponent fixationFrames
      Begin Routine:
        # set border color of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        fixationFrame2.setLineColor(borderColor)
    TextComponent fixation1
      color [set every repeat] = white
      text [set every repeat] = +
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0
      letterHeight = 1.5
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    PolygonComponent fixationFrame1
      startVal [time (s)] = 0.0
      size = [18, 18]
      fillColor = None
      stopVal [duration (s)] = 2
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    PolygonComponent fixationFrame2
      startVal [time (s)] = 0.0
      size = [19, 19]
      fillColor = None
      stopVal [duration (s)] = 2
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  Routine directions3
    ImageComponent cue
      pos = [-2, 0]
      startVal [time (s)] = 0.0
      image = $os.path.join('images','low.png')
      size = [0.5, 0.5]
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    ImageComponent image
      startVal [time (s)] = 0.0
      image = $os.path.join('images','crater_planet.png')
      size = [5, 5]
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    TextComponent outcome
      color = green
      text = $0.20
      pos = [0, 1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine directions2
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent directionsText2
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        First you will see a cue to show you the stakes of the block.

        Next you will see planets or asteroids. Only click for planets! If it is a planet, click your pointer finger as quickly as possible, but don't click the asteroids!

        At the end of a block, you will see how much you earned, and then you will get a short break.
  Routine setOrder
    CodeComponent setRunOrders
      Begin Routine:
        if Run=='Run1':
            valueConditions=ValueCondition1
        if Run=='Run2':
            valueConditions=ValueCondition2
        if Run=='Run3':
            valueConditions=ValueCondition3
        if Run=='Run4':
            valueConditions=ValueCondition4
  Routine Directions
    TextComponent direction1
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        You will be traveling through different galaxies. You can win or lose different amounts of money in each galaxy.

        If you see a circle with 1 star, that means you can win or lose a low amount. If you do well, you will earn 20 cents, but if you make a mistake, you will lose 10 cents.

        If you see a circle with 2 stars, that means you can win or lose a high amount. You can earn 1 dollar or lose 50 cents.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent setConditionsFile
      Begin Experiment:
        colorTrialsFile = os.path.join('conditions', 'RewardGoNoGo_Version%s.xlsx' % expInfo['colorVersion'])
        logging.exp("Using trial color file: %s" % colorTrialsFile)
        runOrderFile = os.path.join('conditions', 'GalaxyValues%s.xlsx' % expInfo['runOrder'])
        logging.exp("Using run order file: %s" % runOrderFile)
  Routine block_ITI
    TextComponent fixation_1
      text = +
      stopVal [duration (s)] = $ISI1
      startVal [time (s)] = 0.0
      letterHeight = 1
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    PolygonComponent itiFrame1
      startVal [time (s)] = 0.0
      size = [18, 18]
      fillColor = None
      stopVal [duration (s)] = $ISI1
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    PolygonComponent itiFrame2
      startVal [time (s)] = 0.0
      size = [19, 19]
      fillColor = None
      stopVal [duration (s)] = $ISI1
      lineColor = black
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    CodeComponent setFrame
      Begin Experiment:
        # set border color
        borderColor='black'
      Begin Routine:
        # set border width of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        itiFrame2.setLineColor(borderColor)
  Routine trial
    CodeComponent setJitter
      Begin Routine:
        ISI=ISIs.pop()
      End Routine:
        trials.addData('ISI', ISI)
    CodeComponent setRotation
      Begin Routine:
        rotation=AllRotations.pop()
    CodeComponent setTargetColors
      Begin Experiment:
        targetType=None
        prepot=None
      Begin Routine:
        if valueConditions=="Low1":
            targetColor=LowColors1
            targetType=TrialType1
            prepot=Prepot1
            GoPrepot=GoPrepot1
            stimPic=StimType1
        elif valueConditions=="High1":
            targetColor=HighColors1
            targetType=TrialType1
            prepot=Prepot1
            GoPrepot=GoPrepot1
            stimPic=StimType1
        if valueConditions=="Low2":
            targetColor=LowColors2
            targetType=TrialType2
            prepot=Prepot2
            GoPrepot=GoPrepot2
            stimPic=StimType2
        elif valueConditions=="High2":
            targetColor=HighColors2
            targetType=TrialType2
            prepot=Prepot2
            GoPrepot=GoPrepot2
            stimPic=StimType2
        if valueConditions=="Low3":
            targetColor=LowColors3
            targetType=TrialType3
            prepot=Prepot3
            GoPrepot=GoPrepot3
            stimPic=StimType3
        elif valueConditions=="High3":
            targetColor=HighColors3
            targetType=TrialType3
            prepot=Prepot3
            GoPrepot=GoPrepot3
            stimPic=StimType3
        if valueConditions=="Low4":
            targetColor=LowColors4
            targetType=TrialType4
            prepot=Prepot4
            GoPrepot=GoPrepot4
            stimPic=StimType4
        elif valueConditions=="High4":
            targetColor=HighColors4
            targetType=TrialType4
            prepot=Prepot4
            GoPrepot=GoPrepot4
            stimPic=StimType4
        if valueConditions=="Low5":
            targetColor=LowColors5
            targetType=TrialType5
            prepot=Prepot5
            GoPrepot=GoPrepot5
            stimPic=StimType5
        elif valueConditions=="High5":
            targetColor=HighColors5
            targetType=TrialType5
            prepot=Prepot5
            GoPrepot=GoPrepot5
            stimPic=StimType5
        if valueConditions=="Low6":
            targetColor=LowColors6
            targetType=TrialType6
            prepot=Prepot6
            GoPrepot=GoPrepot6
            stimPic=StimType6
        elif valueConditions=="High6":
            targetColor=HighColors6
            targetType=TrialType6
            prepot=Prepot6
            GoPrepot=GoPrepot6
            stimPic=StimType6
    CodeComponent setKeyResponses
      Begin Experiment:
        # set border color
        borderColor='black'

        # Assumes "first key" or "last key" was chosen for store.
        # List conversion (to single key) happens immediately
        # when component finishes.
        def check_correct(keys,correct):
            if len(keys):  # At least 1 response
                if keys == correct:
                    return True
                else:
                    return False
            else:  # No response
                if correct == None:
                    return True
                else:
                    return False

        # set outcome values
        outcomeNumber='0'
        outcomeText='0'
      Begin Routine:
        #targetImage=stimPic

        # Set Target Image on Go/Nogo Condition
        if expInfo['hand'] == 'right':
            if targetType == 'go':
              correct =  '1'
            else:
              correct = None
        else: # if hand='left'
            if targetType == 'go':
              correct =  '6'
            else:
              correct = None

        # set border color of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        trialFrame2.setLineColor(borderColor)
      End Routine:
        trials.addData('valueCondition', valueCondition)
        #trials.addData('targetImage', targetImage)
        trials.addData('targetColor', targetColor)
        trials.addData('stimRotation', rotation)
        trials.addData('thisTargetType', targetType)
        trials.addData('thisTrialNoGoPrepot', prepot)
        trials.addData('thisTrialGoPrepot', GoPrepot)
    PolygonComponent trialFrame
      startVal [time (s)] = 0
      size = [18, 18]
      fillColor = None
      stopVal [duration (s)] = 0.5
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    PolygonComponent trialFrame2
      startVal [time (s)] = 0
      size = [19, 19]
      fillColor = None
      stopVal [duration (s)] = 0.5
      durationEstim = 0.5
      lineColor = black
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    ImageComponent Target
      color [set every repeat] = eval($targetColor)
      stopVal [duration (s)] = 0.5
      durationEstim = 0.5
      startEstim = 0
      texture resolution = 256
      ori [set every repeat] = $rotation
      startVal [time (s)] = 0
      image [set every repeat] = $os.path.join('images',eval($stimPic))
      size = [15, 15]
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    KeyboardComponent targetResp
      correctAns = $correct
      storeCorrect = True
      stopVal [duration (s)] = 0.5
      durationEstim = 0.5
      forceEndRoutine = False
      allowedKeys [set every repeat] = 'space', '0', '1', '2', '3', '4', '5','6', '7', '8', '9' 
      startVal [time (s)] = 0
      store = first key
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    CodeComponent targetTiming
      Each Frame:
        #if not targetTimeAdded:
        #    currentLoop.addData('targetOnset', fmriClock.getTime())
        #    targetTimeAdded = True
      Begin Routine:
        trials.addData('targetOnset', fmriClock.getTime())

        #targetTimeAdded= False
      End Routine:
        trials.addData('targetOffset', fmriClock.getTime())
    CodeComponent setTargetPhysioPins
      Begin Experiment:
        thisTrialType=None
      Begin Routine:
        if valueCondition=='low': # set pins for target in low block
            if targetType=='go': # go in a low block
                thisTrialType="lowGo"
                pins='00001001'
                trials.addData('LowGoOnset', fmriClock.getTime())
            else: # if no go in low block
                thisTrialType="lowNoGo"
                pins='00010001'
                trials.addData('LowNoGoOnset', fmriClock.getTime())

        if valueCondition=='high': # set pins for target in high block
            if targetType=='go': # go in a high block
                thisTrialType="highGo"
                pins='00001010'
                trials.addData('HighGoOnset', fmriClock.getTime())
            else: # if no go in high block
                thisTrialType="highNoGo"
                pins='00010010'
                trials.addData('HighNoGoOnset', fmriClock.getTime())

        ser and ser.writeUSB(1,int(pins,2))
      End Routine:
        trials.addData('thisTrialType', thisTrialType)

        if valueCondition=='low': # lower pins for target in low block
                pins='00000001'
                if targetType == "go":
                  trials.addData('LowGoOffset', fmriClock.getTime())
                else:
                  trials.addData('LowNoGoOffset', fmriClock.getTime())

        if valueCondition=='high': # lower pins for target in high block
                pins='00000010'
                if targetType == "go":
                  trials.addData('HighGoOffset', fmriClock.getTime())
                else:
                  trials.addData('HighNoGoOffset', fmriClock.getTime())

        ser and ser.writeUSB(1,int(pins,2))
  Routine trial_ISI
    CodeComponent setFrame_isi
      Begin Experiment:
        # set border color
        borderColor='black'
      Begin Routine:
        # set border color of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        isiFrame2.setLineColor(borderColor)
    TextComponent ISI_2
      text = +
      stopVal [duration (s)] = $ISI2
      startVal [time (s)] = 0.0
      letterHeight = 1
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    PolygonComponent isiFrame1
      startVal [time (s)] = 0.0
      size = [18, 18]
      fillColor = None
      stopVal [duration (s)] = $ISI2
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    PolygonComponent isiFrame2
      pos = [19, 19]
      startVal [time (s)] = 0.0
      size = [0.5, 0.5]
      fillColor = None
      stopVal [condition] = $ISI_2.status==FINISHED
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  Routine outcome_2
Flow
  Routine Welcome
  Routine Directions
  Routine directions2
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = conditions/PlanetRuns.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'Run': u'Run1'},
      {u'Run': u'Run2'},
      {u'Run': u'Run3'},
      {u'Run': u'Run4'}]
    Routine trigger
    Routine waitForScanner
    LoopInitiator blocks loopType="TrialHandler"
      conditionsFile = $runOrderFile
      loopType = sequential
      nReps = 1
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      Routine trial_cue
      Routine fixation
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = $colorTrialsFile
        loopType = sequential
        nReps = 1
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        Routine trial
        Routine jitter
      LoopTerminator trials
      Routine feedback
      Routine endBlock
    LoopTerminator blocks
    Routine runEnd
  LoopTerminator runs
  Routine End
