PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'session': u'prac', u'participant': u'PP'}
  expName = PlanetPractice_StripedGo
  Units = deg
  Screen = 1
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Routines
  Routine Directions_images
    TextComponent text_5
      pos = [0, 5]
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        In this game, you will see planets and asteroids. Planets have stripes, and asteroids have craters. Only click for the planets! If it is a planet, click space as quickly as possible. If it is an asteroid, do not press anything.
    ImageComponent image_2
      pos = [-10, -3]
      startVal [time (s)] = 0.0
      image = images/striped_planet.png
      size = [10, 10]
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    ImageComponent image_3
      pos = [10, -3]
      startVal [time (s)] = 0.0
      image = images/crater_planet.png
      size = [10, 10]
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_6
      text = Planet
      pos = [-10, -9]
      startVal [time (s)] = 0.0
      letterHeight = 1.5
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    TextComponent text_7
      text = Asteroid
      pos = [10, -9]
      startVal [time (s)] = 0.0
      letterHeight = 1.5
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  Routine End
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        You finished the practice!

        In the real game, you will only see the cue when the block starts, and you will only get feedback when you finish the block. Remember to go as fast as you can!

        If you forget whether you are playing for low or high amounts, look at the boxes. One box means low, and two boxes mean high.

        Do you have any questions?
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine lastJitter
    TextComponent text
      text = +
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 1.5
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  Routine directions1
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_8
      pos = [-10, 0]
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        You will be traveling through different galaxies. In one galaxy, you can win low amounts of money, but in the other you can win high amounts.

        If you see a circle with 1 star, that means you can win or lose a low amount.

        If you see a circle with 2 stars, that means you can win or lose a high amount.

        Click space to continue.
    ImageComponent highCueImage
      pos = [10, -5]
      startVal [time (s)] = 0.0
      image = images/high.png
      size = [9, 9]
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    ImageComponent lowCueImage
      pos = [10, 6]
      startVal [time (s)] = 0.0
      image = images/low.png
      size = [9, 9]
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    TextComponent lowLabel
      text = Low
      pos = [13.5, 10]
      startVal [time (s)] = 0.0
      letterHeight = .8
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    TextComponent highLabel
      text = High
      pos = [13.5, -.5]
      startVal [time (s)] = 0.0
      letterHeight = .8
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    PolygonComponent polygon
      fillColor = None
      pos = [10, 6]
      startVal [time (s)] = 0.0
      size = [10, 10]
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    PolygonComponent polygon_2
      fillColor = None
      pos = [10, -5]
      startVal [time (s)] = 0.0
      size = [10, 10]
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    PolygonComponent polygon_3
      fillColor = None
      pos = [10, -5]
      startVal [time (s)] = 0.0
      size = [10.5, 10.5]
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  Routine directions3
    ImageComponent cue
      pos = [-2, 0]
      startVal [time (s)] = 0.0
      image = $os.path.join('images','low.png')
      size = [0.5, 0.5]
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    ImageComponent image
      startVal [time (s)] = 0.0
      image = $os.path.join('images','crater_planet.png')
      size = [5, 5]
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    TextComponent outcome
      color = green
      text = $0.20
      pos = [0, 1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine directions2
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_4
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        First you will see a cue that will tell you how much you can earn.

        Next you will see a planet or an asteroid.

        Then you will see how you did. If you did well, you will get a reward, but if you did not do well you will get punished.

        Press space to start the practice!
  Routine trial
    CodeComponent setImageCode
      Begin Experiment:
        # set border color
        borderColor='black'

        # Assumes "first key" or "last key" was chosen for store.
        # List conversion (to single key) happens immediately
        # when component finishes.
        def check_correct(keys,correct):
            if len(keys):  # At least 1 response
                if keys == correct:
                    return True
                else:
                    return False
            else:  # No response
                if correct == None:
                    return True
                else:
                    return False
      Begin Routine:
        # Set Cue image on Reward Value Condition
        if valueCondition == 'low':
            cueImage = 'low.png'
        else:
            cueImage = 'high.png'

        # Set Target Image on Go/Nogo Condition
        if targetType == 'go':
            targetImage = 'striped_planet.png'
            correct = 'space'
        else:
            targetImage = 'crater_planet.png'
            correct = None



        # set border width of 2nd border frame
        if valueCondition == 'low':
             borderColor='black'
        else:
             borderColor='white'
        trialFrame2.setLineColor(borderColor)

        # set outcome text
        outcomeText=None
        outcomeColor='white'
      Each Frame:
        # write outcome text
        if key_resp_1.status == STOPPED and outcomeText == None:
            if check_correct(key_resp_1.keys,correct):
                if valueCondition == 'low':
                    outcomeText = 'Correct! + $0.20'
                    outcomeColor = 'green'
                else:  # valueCondition == 'high'
                    outcomeText = 'Correct! + $1.00'
                    outcomeColor='green'
            else:
              if valueCondition == 'low':
                    outcomeText = 'Incorrect! - $0.10'
                    outcomeColor='red'
              else:  # valueCondition == 'high'
                    outcomeText = 'Incorrect! - $0.50'
                    outcomeColor='red'
            Reward_text.setText(outcomeText)
            Reward_text.setColor(outcomeColor)
            trials.addData('outcomeText',outcomeText)
            trials.addData('cueImage', cueImage)
            trials.addData('targetImage', targetImage)
    PolygonComponent trialFrame
      fillColor = None
      stopVal [condition] = $Reward_text.status==FINISHED
      lineWidth = 2
      startVal [time (s)] = 0
      size = [18, 18]
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    PolygonComponent trialFrame2
      fillColor = None
      stopVal [condition] = $Reward_text.status==FINISHED
      lineWidth = 2
      lineColor = black
      startVal [time (s)] = 0
      size = [19, 19]
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    ImageComponent Cue_1
      stopVal [duration (s)] = 0.5
      durationEstim = 0.5
      startEstim =  3
      startVal [time (s)] = 0
      image [set every repeat] = $os.path.join('images',cueImage)
      size = [15, 15]
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    TextComponent ISI_1
      text = +
      stopVal [duration (s)] = $ISI1
      durationEstim = 3
      startEstim = 3.5
      startVal [condition] = $Cue_1.status==FINISHED
      letterHeight = 1
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    ImageComponent Target
      color [set every repeat] = $[1,1,1]
      stopVal [duration (s)] = 0.5
      durationEstim = 0.5
      startEstim = 6.5
      texture resolution = 256
      startVal [condition] = $ISI_1.status==FINISHED
      image [set every repeat] = $os.path.join('images',targetImage)
      size = [15, 15]
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    KeyboardComponent key_resp_1
      correctAns = $correct
      storeCorrect = True
      stopVal [duration (s)] = 1.5
      forceEndRoutine = False
      startEstim = 6.5
      allowedKeys = 'space'
      startVal [condition] = $ISI_1.status==FINISHED
      store = first key
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    TextComponent ISI_2
      text = +
      stopVal [duration (s)] = 2
      durationEstim = 3
      startEstim = 7
      startVal [condition] = $Target.status==FINISHED
      letterHeight = 1
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    TextComponent Reward_text
      stopVal [duration (s)] = 2
      startEstim = 10
      startVal [condition] = $ISI_2.status==FINISHED
      letterHeight = 1
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    TextComponent ITI
      text = +
      stopVal [duration (s)] = 2
      startVal [condition] = Reward_text.status==FINISHED
      letterHeight = 1
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  Routine Directions
    TextComponent direction1
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        You will be traveling through different galaxies. In one galaxy, you can win low amounts of money, but in the other you can win high amounts.

        If you see a circle with 2 stars, that means you can win or lose a high amount.

        If you see a circle with 1 star, that means you can win or lose a low amount.

        Click space to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine runEnd
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        You finished this round!

        Get ready for the next part...

        When you're ready, press space to continue.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine directions1
  Routine Directions_images
  Routine directions2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions/practice.xlsx
    random seed = 0
    loopType = random
    nReps = 1
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    conditions:
      [{u'valueCondition': u'low', u'targetType': u'go', u'ISI1': 2, u'targetcolor': u'blue'},
      {u'valueCondition': u'low', u'targetType': u'nogo', u'ISI1': 2, u'targetcolor': u'red'},
      {u'valueCondition': u'low', u'targetType': u'go', u'ISI1': 2, u'targetcolor': u'yellow'},
      {u'valueCondition': u'high', u'targetType': u'go', u'ISI1': 2, u'targetcolor': u'green'},
      {u'valueCondition': u'high', u'targetType': u'nogo', u'ISI1': 2, u'targetcolor': u'orange'},
      {u'valueCondition': u'high', u'targetType': u'go', u'ISI1': 2, u'targetcolor': u'purple'}]
    Routine trial
  LoopTerminator trials
  Routine End
